<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:p1="clr-namespace:System.Windows.Forms;assembly=System.Windows.Forms, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089"
                 xmlns:p2="clr-namespace:OpenEphys.Bonsai.Miniscope;assembly=OpenEphys.Bonsai.Miniscope"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>C:/Users/AudreyHay/Documents/data/Bonsai_data/Expe</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>folderBaseName</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>B</wie:Filter>
          <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Equal">
        <Operand xsi:type="WorkflowProperty" TypeArguments="p1:Keys">
          <Value>Space</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>triggerRec</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>F</wie:Filter>
          <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Equal">
        <Operand xsi:type="WorkflowProperty" TypeArguments="p1:Keys">
          <Value>F</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>triggerStop</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="trialDuration" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TimeSpanProperty">
          <Value>PT0S</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>trialDuration</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\generateTimestampedFolder.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\OEBoard.bonsai">
        <BoardPortOE>9001</BoardPortOE>
        <BoardChannelsOE xsi:nil="true" />
        <dataBaseName>OE_32ch_data_.bin</dataBaseName>
        <timestampsBaseName>OE_timestamps_.csv</timestampsBaseName>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Webcam.bonsai">
        <timestampsBaseName>webcam_timestamps_.csv</timestampsBaseName>
        <Index>0</Index>
        <CaptureProperties />
        <videoBaseName>webcam_video_.avi</videoBaseName>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="p2:UclaMiniscopeV4">
            <p2:Index>0</p2:Index>
            <p2:LedBrightness>0</p2:LedBrightness>
            <p2:Focus>0</p2:Focus>
            <p2:SensorGain>Low</p2:SensorGain>
            <p2:FramesPerSecond>Fps30</p2:FramesPerSecond>
            <p2:LedRespectsTrigger>false</p2:LedRespectsTrigger>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Image</Selector>
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>