<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:onix1="clr-namespace:OpenEphys.Onix1;assembly=OpenEphys.Onix1"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:p1="clr-namespace:Bonsai.OpenEphys;assembly=Bonsai.OpenEphys"
                 xmlns:p2="clr-namespace:Bonsai.ONIX;assembly=Bonsai.ONIX"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="Extensions\MetaInfo.bonsai">
          <MetaFileName>meta_info.csv</MetaFileName>
          <rootPath>../../../Documents/data/Tests</rootPath>
          <User>Melodie</User>
          <ProjectName>project</ProjectName>
          <numBlocks>2</numBlocks>
          <preStimLength>10</preStimLength>
          <StimX>100</StimX>
          <StimY>0</StimY>
          <Value>42</Value>
          <folderbase>../../../Documents/data/Tests</folderbase>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>ProjectName</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="ExternalizedMapping">
          <Property Name="Value" DisplayName="folderbase" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="StringProperty">
            <Value>../../../Documents/data/Tests</Value>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:CombineLatest" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Format">
          <Format>{1}/{0}/raw_data/</Format>
          <Selector>Item1,Item2</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
          <PropertyMappings>
            <Property Name="folderBaseName" />
          </PropertyMappings>
        </Builder>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\generateTimestampedFolder.bonsai">
        <folderBaseName>../../../Documents/data/Tests/NPX/raw_data/</folderBaseName>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>pathName</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="onix1:CreateContext">
            <onix1:Driver>riffa</onix1:Driver>
            <onix1:Index>0</onix1:Index>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="onix1:ConfigureBreakoutBoard">
            <onix1:Name>BreakoutBoard</onix1:Name>
            <onix1:Heartbeat>
              <onix1:DeviceName>BreakoutBoard/PersistentHeartbeat</onix1:DeviceName>
              <onix1:DeviceAddress>0</onix1:DeviceAddress>
              <onix1:BeatsPerSecond>100</onix1:BeatsPerSecond>
            </onix1:Heartbeat>
            <onix1:AnalogIO>
              <onix1:DeviceName>BreakoutBoard/AnalogIO</onix1:DeviceName>
              <onix1:DeviceAddress>6</onix1:DeviceAddress>
              <onix1:Enable>false</onix1:Enable>
              <onix1:InputRange0>TenVolts</onix1:InputRange0>
              <onix1:InputRange1>TenVolts</onix1:InputRange1>
              <onix1:InputRange2>TenVolts</onix1:InputRange2>
              <onix1:InputRange3>TenVolts</onix1:InputRange3>
              <onix1:InputRange4>TenVolts</onix1:InputRange4>
              <onix1:InputRange5>TenVolts</onix1:InputRange5>
              <onix1:InputRange6>TenVolts</onix1:InputRange6>
              <onix1:InputRange7>TenVolts</onix1:InputRange7>
              <onix1:InputRange8>TenVolts</onix1:InputRange8>
              <onix1:InputRange9>TenVolts</onix1:InputRange9>
              <onix1:InputRange10>TenVolts</onix1:InputRange10>
              <onix1:InputRange11>TenVolts</onix1:InputRange11>
              <onix1:Direction0>Input</onix1:Direction0>
              <onix1:Direction1>Input</onix1:Direction1>
              <onix1:Direction2>Input</onix1:Direction2>
              <onix1:Direction3>Input</onix1:Direction3>
              <onix1:Direction4>Input</onix1:Direction4>
              <onix1:Direction5>Input</onix1:Direction5>
              <onix1:Direction6>Input</onix1:Direction6>
              <onix1:Direction7>Input</onix1:Direction7>
              <onix1:Direction8>Input</onix1:Direction8>
              <onix1:Direction9>Input</onix1:Direction9>
              <onix1:Direction10>Input</onix1:Direction10>
              <onix1:Direction11>Input</onix1:Direction11>
            </onix1:AnalogIO>
            <onix1:DigitalIO>
              <onix1:DeviceName>BreakoutBoard/DigitalIO</onix1:DeviceName>
              <onix1:DeviceAddress>7</onix1:DeviceAddress>
              <onix1:Enable>false</onix1:Enable>
              <onix1:DeadTime>0</onix1:DeadTime>
              <onix1:SampleRate xsi:nil="true" />
            </onix1:DigitalIO>
            <onix1:ClockOutput>
              <onix1:DeviceName>BreakoutBoard/OutputClock</onix1:DeviceName>
              <onix1:DeviceAddress>5</onix1:DeviceAddress>
              <onix1:ClockGate>false</onix1:ClockGate>
              <onix1:Frequency>1000000</onix1:Frequency>
              <onix1:DutyCycle>50</onix1:DutyCycle>
              <onix1:Delay>0</onix1:Delay>
            </onix1:ClockOutput>
            <onix1:HarpInput>
              <onix1:DeviceName>BreakoutBoard/HarpSyncInput</onix1:DeviceName>
              <onix1:DeviceAddress>12</onix1:DeviceAddress>
              <onix1:Enable>false</onix1:Enable>
              <onix1:Source>Breakout</onix1:Source>
            </onix1:HarpInput>
            <onix1:MemoryMonitor>
              <onix1:DeviceName>BreakoutBoard/MemoryMonitor</onix1:DeviceName>
              <onix1:DeviceAddress>10</onix1:DeviceAddress>
              <onix1:Enable>true</onix1:Enable>
              <onix1:SamplesPerSecond>10</onix1:SamplesPerSecond>
            </onix1:MemoryMonitor>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="onix1:ConfigureHeadstageNeuropixelsV1e">
            <onix1:Name>HeadstageNeuropixelsV1e</onix1:Name>
            <onix1:NeuropixelsV1e>
              <onix1:DeviceName>HeadstageNeuropixelsV1e/NeuropixelsV1e</onix1:DeviceName>
              <onix1:DeviceAddress>256</onix1:DeviceAddress>
              <onix1:Enable>true</onix1:Enable>
              <onix1:EnableLed>true</onix1:EnableLed>
              <onix1:InvertPolarity>true</onix1:InvertPolarity>
              <onix1:GainCalibrationFile />
              <onix1:AdcCalibrationFile />
              <onix1:ProbeConfiguration>
                <onix1:SpikeAmplifierGain>Gain1000</onix1:SpikeAmplifierGain>
                <onix1:LfpAmplifierGain>Gain50</onix1:LfpAmplifierGain>
                <onix1:Reference>External</onix1:Reference>
                <onix1:SpikeFilter>true</onix1:SpikeFilter>
                <onix1:ProbeGroup>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</onix1:ProbeGroup>
              </onix1:ProbeConfiguration>
            </onix1:NeuropixelsV1e>
            <onix1:Bno055>
              <onix1:DeviceName>HeadstageNeuropixelsV1e/PolledBno055</onix1:DeviceName>
              <onix1:DeviceAddress>257</onix1:DeviceAddress>
              <onix1:Enable>true</onix1:Enable>
              <onix1:AxisMap>YZX</onix1:AxisMap>
              <onix1:AxisSign>MirrorZ MirrorX</onix1:AxisSign>
            </onix1:Bno055>
            <onix1:Port>PortA</onix1:Port>
            <onix1:PortVoltage>
              <onix1:Requested xsi:nil="true" />
            </onix1:PortVoltage>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="onix1:StartAcquisition">
            <onix1:ReadSize>8192</onix1:ReadSize>
            <onix1:WriteSize>2048</onix1:WriteSize>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Timestamp" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>start-time_.csv</io:FileName>
          <io:Append>false</io:Append>
          <io:Overwrite>false</io:Overwrite>
          <io:Suffix>FileCount</io:Suffix>
          <io:IncludeHeader>true</io:IncludeHeader>
          <io:Selector>Timestamp,Value</io:Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="onix1:PortStatus">
            <onix1:DeviceName>HeadstageNeuropixelsV1e/PortController</onix1:DeviceName>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Timestamp" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>port-status_.csv</io:FileName>
          <io:Append>false</io:Append>
          <io:Overwrite>false</io:Overwrite>
          <io:Suffix>FileCount</io:Suffix>
          <io:IncludeHeader>false</io:IncludeHeader>
          <io:Selector>Timestamp,Value.Clock,Value.StatusCode</io:Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="Extensions\Neuropixel.bonsai">
          <frameCounterBaseName>NP_FrameCounter_.raw</frameCounterBaseName>
          <LFPDataBaseName>NP_LFPdata_.raw</LFPDataBaseName>
          <spikeDataBaseName>NP_spikes_.raw</spikeDataBaseName>
          <NPXChannelsOE>
            <int>1</int>
            <int>2</int>
            <int>3</int>
            <int>5</int>
            <int>6</int>
            <int>7</int>
            <int>9</int>
            <int>10</int>
            <int>11</int>
            <int>13</int>
            <int>14</int>
            <int>15</int>
          </NPXChannelsOE>
          <NPXPortOE>9002</NPXPortOE>
          <clockBaseName>NP_timestamps_.raw</clockBaseName>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="onix1:PolledBno055Data">
            <onix1:DeviceName>HeadstageNeuropixelsV1e/PolledBno055</onix1:DeviceName>
            <onix1:PolledRegisters>All</onix1:PolledRegisters>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>bno055_.csv</io:FileName>
          <io:Append>false</io:Append>
          <io:Overwrite>false</io:Overwrite>
          <io:Suffix>FileCount</io:Suffix>
          <io:IncludeHeader>false</io:IncludeHeader>
          <io:Selector>Clock,EulerAngle,Quaternion,Acceleration,Gravity,Temperature</io:Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Quaternion</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="OpenEphys.Commutator:AutoCommutator.bonsai">
          <PortName>COM5</PortName>
          <Enable>true</Enable>
          <EnableLed>true</EnableLed>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="onix1:MemoryMonitorData">
            <onix1:DeviceName>BreakoutBoard/MemoryMonitor</onix1:DeviceName>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>PercentUsed</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="ExternalizedMapping">
          <Property Name="Direction00" Category="VmIntra" />
          <Property Name="InputRange00" Category="VmIntra" />
          <Property Name="Direction01" Category="Vm" />
          <Property Name="Direction02" Category="Puff-LED" />
          <Property Name="Direction03" Category="Im" />
          <Property Name="Direction04" Category="S1 LFP" />
          <Property Name="Direction05" Category="M1 LFP" />
          <Property Name="Direction06" Category="EEG" />
          <Property Name="Direction07" Category="EMG" />
          <Property Name="Direction08" Category="Touch" />
          <Property Name="Direction09" Category="CamTTL" />
          <Property Name="Direction10" Category="Channel 10" />
          <Property Name="Direction11" Category="Channel 11" />
          <Property Name="InputRange01" Category="Vm" />
          <Property Name="InputRange02" Category="Puff-LED" />
          <Property Name="InputRange03" Category="Im" />
          <Property Name="InputRange04" Category="S1 LFP" />
          <Property Name="InputRange05" Category="M1 LFP" />
          <Property Name="InputRange06" Category="EEG" />
          <Property Name="InputRange08" Category="Touch" />
          <Property Name="InputRange07" Category="EMG" />
          <Property Name="InputRange09" Category="CamTTL" />
          <Property Name="InputRange10" Category="Channel 10" />
          <Property Name="InputRange11" Category="Channel 11" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="Extensions\ONIXAnalog.bonsai">
          <Direction00>Input</Direction00>
          <Direction01>Input</Direction01>
          <Direction02>Input</Direction02>
          <Direction03>Input</Direction03>
          <Direction04>Input</Direction04>
          <Direction05>Input</Direction05>
          <Direction06>Input</Direction06>
          <Direction07>Input</Direction07>
          <Direction08>Input</Direction08>
          <Direction09>Input</Direction09>
          <Direction10>Input</Direction10>
          <Direction11>Input</Direction11>
          <InputRange00>TenVolts</InputRange00>
          <InputRange01>TenVolts</InputRange01>
          <InputRange02>TenVolts</InputRange02>
          <InputRange03>TenVolts</InputRange03>
          <InputRange04>TenVolts</InputRange04>
          <InputRange05>TenVolts</InputRange05>
          <InputRange06>TenVolts</InputRange06>
          <InputRange08>TenVolts</InputRange08>
          <InputRange07>TenVolts</InputRange07>
          <InputRange09>TenVolts</InputRange09>
          <InputRange10>TenVolts</InputRange10>
          <InputRange11>TenVolts</InputRange11>
          <DeviceAddress>
            <HardwareSlot>
              <Driver>riffa</Driver>
              <Index>0</Index>
            </HardwareSlot>
            <Address>6</Address>
          </DeviceAddress>
          <BlockSize>1000</BlockSize>
          <DataType>Volts</DataType>
          <EnableStream>true</EnableStream>
          <ONIXPortOE>9003</ONIXPortOE>
          <ONIXChannelsOE xsi:nil="true" />
          <dataBaseName>Analog_data_.bin</dataBaseName>
          <timestampsBaseName>Analog_timestamps_.raw</timestampsBaseName>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="Extensions\timing.bonsai">
          <DueTime>PT1S</DueTime>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="Extensions\OEBoard.bonsai">
          <BoardLeds>true</BoardLeds>
          <BufferCount>1024</BufferCount>
          <SampleRate>SampleRate20000Hz</SampleRate>
          <BoardIndex>-1</BoardIndex>
          <ExternalFastSettleEnabled>false</ExternalFastSettleEnabled>
          <LowerBandwidth>0.1</LowerBandwidth>
          <UpperBandwidth>7500</UpperBandwidth>
          <DspCutoffFrequency>1</DspCutoffFrequency>
          <DspEnabled>true</DspEnabled>
          <CableDelayA xsi:nil="true" />
          <CableDelayB xsi:nil="true" />
          <CableDelayC xsi:nil="true" />
          <CableDelayD xsi:nil="true" />
          <BoardPortOE>9001</BoardPortOE>
          <BoardChannelsOE xsi:nil="true" />
          <dataBaseName>OE_32ch_data_.bin</dataBaseName>
          <timestampsBaseName>OE_32ch_timestamps_.csv</timestampsBaseName>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="p1:AcquisitionBoard">
            <p1:BoardLeds>false</p1:BoardLeds>
            <p1:BoardIndex>-1</p1:BoardIndex>
            <p1:BufferCount>256</p1:BufferCount>
            <p1:SampleRate>SampleRate20000Hz</p1:SampleRate>
            <p1:ExternalFastSettleEnabled>false</p1:ExternalFastSettleEnabled>
            <p1:LowerBandwidth>0.1</p1:LowerBandwidth>
            <p1:UpperBandwidth>7500</p1:UpperBandwidth>
            <p1:DspCutoffFrequency>1</p1:DspCutoffFrequency>
            <p1:DspEnabled>true</p1:DspEnabled>
            <p1:CableDelayA xsi:nil="true" />
            <p1:CableDelayB xsi:nil="true" />
            <p1:CableDelayC xsi:nil="true" />
            <p1:CableDelayD xsi:nil="true" />
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>AmplifierData</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="Extensions\Webcam.bonsai">
          <timestampsBaseName>webcam_timestamps_.csv</timestampsBaseName>
          <Index>0</Index>
          <CaptureProperties />
          <videoBaseName>webcam_video_.avi</videoBaseName>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="Extensions\MiniscopeImaging.bonsai">
          <videoBaseName>miniscope_.avi</videoBaseName>
          <Gain>High</Gain>
          <LEDBrightness>100</LEDBrightness>
          <LiquidLensVoltage>24.4</LiquidLensVoltage>
          <FrameRate>FPS30Hz</FrameRate>
          <InterleaveLED>true</InterleaveLED>
          <DeviceAddress>
            <HardwareSlot>
              <Driver>riffa</Driver>
              <Index>0</Index>
            </HardwareSlot>
            <Address>8</Address>
          </DeviceAddress>
          <EnableStream>true</EnableStream>
          <timestampsBaseName>miniscopeTS_.csv</timestampsBaseName>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="Extensions\CommutatorMiniscope.bonsai">
          <DeviceAddress>
            <HardwareSlot>
              <Driver>riffa</Driver>
              <Index>0</Index>
            </HardwareSlot>
            <Address>8</Address>
          </DeviceAddress>
          <fileBaseName>heading_.csv</fileBaseName>
          <PortName>COM4</PortName>
          <tsBaseName>headingTS_.csv</tsBaseName>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>ONIXDigital</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Timer">
                  <rx:DueTime>PT0.5S</rx:DueTime>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="IntProperty">
                  <Value>1</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Timer">
                  <rx:DueTime>PT0S</rx:DueTime>
                  <rx:Period>PT1S</rx:Period>
                </Combinator>
              </Expression>
              <Expression xsi:type="rx:Condition">
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>triggerStop</Name>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:TakeUntil" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Timer">
                  <rx:DueTime>PT0S</rx:DueTime>
                  <rx:Period>PT0.5S</rx:Period>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="IntProperty">
                  <Value>0</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Timer">
                  <rx:DueTime>PT0S</rx:DueTime>
                  <rx:Period>PT0.5S</rx:Period>
                </Combinator>
              </Expression>
              <Expression xsi:type="rx:Condition">
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>triggerStop</Name>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:SkipUntil" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Merge" />
              </Expression>
              <Expression xsi:type="rx:PublishSubject">
                <Name>digitalStim</Name>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>digitalStim</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="p2:DigitalIODevice">
                  <p2:DeviceAddress>
                    <p2:HardwareSlot>
                      <p2:Driver>riffa</p2:Driver>
                      <p2:Index>0</p2:Index>
                    </p2:HardwareSlot>
                    <p2:Address>7</p2:Address>
                  </p2:DeviceAddress>
                  <p2:LEDBrightness>13.333333333333334</p2:LEDBrightness>
                  <p2:EnableStream>true</p2:EnableStream>
                </Combinator>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Port</Selector>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Timestamp" />
              </Expression>
              <Expression xsi:type="io:CsvWriter">
                <io:FileName>ts_.csv</io:FileName>
                <io:Append>false</io:Append>
                <io:Overwrite>false</io:Overwrite>
                <io:Suffix>Timestamp</io:Suffix>
                <io:IncludeHeader>false</io:IncludeHeader>
              </Expression>
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="4" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="4" Label="Source2" />
              <Edge From="4" To="10" Label="Source1" />
              <Edge From="5" To="6" Label="Source1" />
              <Edge From="6" To="9" Label="Source1" />
              <Edge From="7" To="8" Label="Source1" />
              <Edge From="8" To="9" Label="Source2" />
              <Edge From="9" To="10" Label="Source2" />
              <Edge From="10" To="11" Label="Source1" />
              <Edge From="12" To="13" Label="Source1" />
              <Edge From="12" To="16" Label="Source1" />
              <Edge From="13" To="14" Label="Source1" />
              <Edge From="14" To="15" Label="Source1" />
              <Edge From="16" To="17" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="Extensions\timing.bonsai">
          <DueTime>PT0S</DueTime>
        </Builder>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\OEBoardMultiple.bonsai">
        <nChannelsPerAnimal>32</nChannelsPerAnimal>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Animal1</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\saveMatrixData.bonsai">
        <dataBaseName>OE_32ch_data_.bin</dataBaseName>
        <animalID>Mouse1</animalID>
        <timestampsBaseName>OE_timestamps_.bin</timestampsBaseName>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\timing.bonsai">
        <delayEnd>PT0S</delayEnd>
        <trialDuration>PT10S</trialDuration>
        <triggerStop>F</triggerStop>
        <triggerRec>B</triggerRec>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Animal2</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\saveMatrixData.bonsai">
        <dataBaseName>OE_32ch_data_.bin</dataBaseName>
        <animalID>Mouse2</animalID>
        <timestampsBaseName>OE_timestamps_.bin</timestampsBaseName>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\timing.bonsai">
        <delayEnd>PT0S</delayEnd>
        <trialDuration>PT10S</trialDuration>
        <triggerStop>Z</triggerStop>
        <triggerRec>H</triggerRec>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Animal3</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\saveMatrixData.bonsai">
        <dataBaseName>OE_32ch_data_.bin</dataBaseName>
        <animalID>Mouse3</animalID>
        <timestampsBaseName>OE_timestamps_.bin</timestampsBaseName>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\timing.bonsai">
        <delayEnd>PT0S</delayEnd>
        <trialDuration>PT10S</trialDuration>
        <triggerStop>Z</triggerStop>
        <triggerRec>H</triggerRec>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Animal4</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\saveMatrixData.bonsai">
        <dataBaseName>OE_32ch_data_.bin</dataBaseName>
        <animalID>Mouse4</animalID>
        <timestampsBaseName>OE_timestamps_.bin</timestampsBaseName>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\timing.bonsai">
        <delayEnd>PT0S</delayEnd>
        <trialDuration>PT10S</trialDuration>
        <triggerStop>F</triggerStop>
        <triggerRec>B</triggerRec>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="4" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="11" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="37" To="40" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="41" To="44" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="45" To="48" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="49" To="52" Label="Source1" />
      <Edge From="50" To="51" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>